PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Enter_Participant'], expName, expInfo['date'])
  Experiment info = {'Enter_Participant': '', 'Enter_Age': '', 'Confirm_Age': '', 'Enter_Site': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['sad139.png', 'crowdohh.wav', 'kids_cheering.wav', 'happy139.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1147, 745]
  expName = mn_amstask_twoseconds_020625
  keyboardBackend = PsychToolbox
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Routines
  Routine End
    ImageComponent end
      image = yay.png
      size = (0.75, 0.5)
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
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      Before Experiment:
        beginning_exp = ''
        timer = ''
        timer_exp = ''
        beginning_exp = ''
        beginning_exp2 = ''
      Begin Experiment:
        globalClock = core.Clock()
        beginning_exp = globalClock.getTime()
      End Routine:
        end_exp = globalClock.getTime();
        time_exp = (end_exp - beginning_exp)
        print(time_exp)
        thisExp.addData("totaltime_exp", time_exp);
  Routine Dot_Arrays
    ImageComponent image_a
      image [set every repeat] = $visual_stimuli
      interpolate = nearest
      size = [1.30, .650]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent blue_rectangle
      disabled = True
      fillColor = None
      lineColor = blue
      lineWidth = 4
      pos = (-.39, 0)
      shape = rectangle
      size = (0.72, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent yellow_rectangle
      disabled = True
      fillColor = None
      lineColor = yellow
      lineWidth = 4
      pos = (0.39, 0)
      shape = rectangle
      size = (0.72, 0.75)
      startVal [time (s)] = 0.0
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    NoiseStimComponent mask_a
      disabled = True
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.025
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (1,1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .5
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    KeyboardComponent response
      allowedKeys = 'a','l','n'
      correctAns = $correct
      forceEndRoutine = True
      storeCorrect = True
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    CodeComponent code_5
      Code Type = JS
      Begin JS Routine:
        blue_rectangle.setFillColor(undefined)
        yellow_rectangle.setFillColor(undefined)
    ImageComponent image_b
      image = amstask_rectangles2.png
      size = [1.30, .650]
      startVal [time (s)] = 2
      units = height
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  Routine Response
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        More blue dots?

        OR

        More yellow dots?
    KeyboardComponent response1
      allowedKeys = 'a','l','n'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instructions
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent taskInst
      letterHeight = 0.0375
      startVal [time (s)] = 0.0
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      text:
        You are going to see some blue dots and some yellow dots.

        Your job is to tell me which color has more dots.

        You can point to which side had more dots, or just say “blue” or “yellow”.

        Experimenter: press "a" for blue and "l" for yellow.




        Ready?
    CodeComponent code_7
      Code Type = Py
      Before Experiment:
        ams_files = ['imagePlaceList_3y_ram.xlsx', 'imagePlaceList_4y_ram.xlsx', 'imagePlaceList_5y_ram.xlsx']
        from psychopy import monitors
        for mon in monitors.getAllMonitors():
            monsize = monitors.Monitor(mon).getSizePix()
            print(monitors.Monitor(mon).getSizePix()[1])
      Begin Experiment:
        x1 = expInfo["Enter_Age"]
        x1 = int(x1)
        x1 = x1 -3
        print(x1)

        x2 = expInfo["Confirm_Age"]
        x2 = int(x2)
        x2 = x2 -3

        if x1 != x2:
            core.quit()

        if expInfo["Enter_Participant"] == '':
            core.quit()

        from psychopy import visual
        win_size = win.size

        thisExp.addData("monitor_size", monsize);
        thisExp.addData("window_size", win_size);

        #regular_res = [1442 , 721]
        #small_res = [1081, 541]
        #big_res = [1717, 858]

        #win_sizew = win_size[0]
        #if win_sizew == 1920:
        #    image_size_adpt = big_res
        #elif win_sizew > 3500:
        #    image_size_adpt = big_res
        #elif win_sizew < 2800:
        #    image_size_adpt = small_res
        #else:
        #    image_size_adpt = regular_res
  Routine Fixation
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine Ready
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent ready
      image = ready.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Readya
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = ready1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        console.log("experimental trials")
  Routine Readyb
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = ready2.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Readyc
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = ready3.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Ready1
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = ready1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Feedback_Practice
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_sound = ['kids_cheering.wav','crowdohh.wav']
        feedback_image = ['happy139.png','sad139.png']
      Begin Routine:
        if response.corr:
             feedback_outcome_sound = feedback_sound[0]
             feedback_outcome_image = feedback_image[0]
        else:
             feedback_outcome_sound = feedback_sound[1]
             feedback_outcome_image = feedback_image[1]
    ImageComponent image_5
      image [set every repeat] = $feedback_outcome_image
      interpolate = nearest
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 256
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    SoundComponent sound_1
      disabled = True
      sound [set every repeat] = $feedback_outcome_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine check_practice
    CodeComponent code_2
      Code Type = Both
      Begin Routine:
        ncount = ncount + 1

        if ncount == 1:
            nCorr2_loop1 = int(practice.data['response.corr'].mean()*100)
            print(nCorr2_loop1)
            if nCorr2_loop1 > 60:
                practice_loop.finished=1

        if ncount == 2:
            nCorr2_loop2 = int(practice.data['response.corr'].mean()*100)
            nCorr2_loop2 = nCorr2_loop2-nCorr2_loop1
            if nCorr2_loop2 > 60:
                practice_loop.finished=1
  Routine repeat_instructions
    CodeComponent code_4
      Code Type = Both
      Before JS Experiment:
        var nCorr2_loop1;
        var nCorr2_loop2;
        var eachResp;
        eachResp=0;
        nCorr2_loop1=0;
        nCorr2_loop2=0;
      Begin JS Experiment:
        var nCorr2_loop1;
        var nCorr2_loop2;
        var eachResp;
        var eachResp=0;
        var nCorr2_loop1=0;
        var nCorr2_loop2=0;
      Begin JS Routine:
        ncount = (ncount + 1);
        console.log(ncount)
        console.log(nCorr2_loop1)

        if ((ncount === 1)) {
            for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
                if ('response.corr' in psychoJS.experiment._trialsData[eachResp]) {
                    nCorr2_loop1 += psychoJS.experiment._trialsData[eachResp]['response.corr'];
                    }
                }
            console.log(nCorr2_loop1)
            if ((nCorr2_loop1 > 3)) {
                practice_loop.finished = true;
                }
        }
        console.log(nCorr2_loop1)


        if ((ncount === 2)) {
            for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
                if ('response.corr' in psychoJS.experiment._trialsData[eachResp]) {
                    nCorr2_loop2 += psychoJS.experiment._trialsData[eachResp]['response.corr'];
                    }
                }
            nCorr2_loop2 = nCorr2_loop2 - nCorr2_loop1
            if ((nCorr2_loop1 > 3)) {
                practice_loop.finished = true;
                }
        }
      Begin Routine:
        if ncount == 1:
            if nCorr2_loop1 > 60:
                continueRoutine=False

        if ncount == 2:
            if nCorr2_loop2 > 60:
                continueRoutine=False
      Each JS Frame:
        if ((ncount === 1)) {
            if (nCorr2_loop1 > 3) {
                console.log("true")
                continueRoutine = false; // until we're told otherwise
                }
            else if (key_resp_9.keys === 'space') {
                continueRoutine = false; // until we're told otherwise
                }
            else {
                console.log("false")
                continueRoutine = true;
                }
        }

        if ((ncount === 2)) {
            if (nCorr2_loop2 > 3) {
                console.log("true")
                continueRoutine = false; // until we're told otherwise
                }
            else if (key_resp_9.keys === 'space') {
                continueRoutine = false; // until we're told otherwise
                }
            else {
                console.log("false")
                continueRoutine = true;
                }
        }
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember!
        Your job is to tell me which color has more dots.
        You can point to the which side had more dots, or just say “blue” or “yellow”.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_counter
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ncount = 0
  Routine mask
    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine Instructions
  Routine Ready
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine practice_counter
    LoopInitiator practice loopType="TrialHandler"
      Selected rows = 0:6
      conditionsFile = imagePlaceList_3y_ram.xlsx
      loopType = random
      nReps = 1
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      Routine Fixation
      Routine Dot_Arrays
      Routine Feedback_Practice
    LoopTerminator practice
    Routine check_practice
    Routine repeat_instructions
  LoopTerminator practice_loop
  Routine Readya
  LoopInitiator block1 loopType="TrialHandler"
    Selected rows = 6:22
    conditionsFile = $ams_files[x1]
    loopType = random
    nReps = 1
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    Routine Fixation
    Routine Dot_Arrays
  LoopTerminator block1
  Routine Readyb
  LoopInitiator block2 loopType="TrialHandler"
    Selected rows = 22:38
    conditionsFile = $ams_files[x1]
    loopType = random
    nReps = 1
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    Routine Fixation
    Routine Dot_Arrays
  LoopTerminator block2
  Routine Readyc
  LoopInitiator block3 loopType="TrialHandler"
    Selected rows = 38:54
    conditionsFile = $ams_files[x1]
    loopType = random
    nReps = 1
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    Routine Fixation
    Routine Dot_Arrays
  LoopTerminator block3
  Routine End
